CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "threshold")
    Name to assign these images:manual
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "pred")
    Name to assign these images:pred
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    Select the image type:Binary mask
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    Select the rule criteria:and (file doesnot contain "pred") (file doesnot contain "threshold")
    Name to assign these images:orig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:manual
    Name the output image:manual_threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
Threshold:[module_num:6|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
    Select the input image:pred
    Name the output image:pred_threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
MeasureImageOverlap:[module_num:7|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
    Select the image to be used as the ground truth basis for calculating the amount of overlap:manual
    Select the image to be used to test for overlap:pred
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No
